PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = Sound-Questions-Experiment-Set
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Routines
  Routine Question1_Happy
    TextComponent Happy_rating_text
      color = black
      disabled = True
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        幸福感の度合いを教えてください
        (１＝低い、9＝高い）
    RatingScaleComponent Happy_rating
      categoryChoices = 1,2,3,4,5,6,7,8,9
      disabled = True
      forceEndRoutine = True
      high = 9
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Sound1
    SoundComponent soundstimuli
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Querstion2_Sad
    TextComponent Sad_rating_text
      color = black
      disabled = True
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        悲壮感の度合いを教えてください
        (１＝低い、9＝高い）
    RatingScaleComponent Sad_rating
      categoryChoices = 1,2,3,4,5,6,7,8,9
      disabled = True
      forceEndRoutine = True
      high = 9
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Queastion3_Joy
    TextComponent Joy_rating_text
      color = black
      disabled = True
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        喜楽感の度合いを教えてください
        (１＝低い、9＝高い）
    RatingScaleComponent Joy_rating
      categoryChoices = 1,2,3,4,5,6,7,8,9
      disabled = True
      forceEndRoutine = True
      high = 9
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine code_start_up
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random, xlrd

        #randomize seed
        random. seed()

        #input file
        in_file = "soundLoop.xlsx"

        #number of times to load
        num_times =26

        #counters to hold the next stimulus reference
        cur_audio = 0
      Begin Routine:
        #open the excel file
        inbook = xlrd.open_workbook(in_file)
        insheet = inbook.sheet_by_index(0)

        #arrays to hold our stimuli
        audio = []

        #randomly shuffle the words
        random.shuffle(audio)
  Routine question
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_box
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    RatingScaleComponent rating
      categoryChoices = 1,2,3,4,5,6,7,8,9
      forceEndRoutine = True
      high = 9
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator question_loop loopType="TrialHandler"
    conditionsFile = soundLoop.xlsx
    loopType = random
    nReps = 26
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    conditions:
      [{'Rand': 0.774432298510339, 'audio': 'audio/fire1.wav'},
      {'Rand': 0.31887348273765326, 'audio': 'audio/river2.wav'},
      {'Rand': 0.08796488341070496, 'audio': 'audio/cave2.wav'},
      {'Rand': 0.12011830766967668, 'audio': 'audio/misa1.wav'},
      {'Rand': 0.26303389065142024, 'audio': 'audio/rain1.wav'},
      {'Rand': 0.13930832631397272, 'audio': 'audio/rain3.wav'},
      {'Rand': 0.06621553351678533, 'audio': 'audio/rain2.wav'},
      {'Rand': 0.3985787405944675, 'audio': 'audio/wind1.wav'},
      {'Rand': 0.45564263249054593, 'audio': 'audio/dog2.wav'},
      {'Rand': 0.9399249931901004, 'audio': 'audio/bird1.wav'},
      {'Rand': 0.4019613724645442, 'audio': 'audio/volcano1.wav'},
      {'Rand': 0.9408559087294069, 'audio': 'audio/strom2.wav'},
      {'Rand': 0.5062962540185366, 'audio': 'audio/strom1.wav'},
      {'Rand': 0.12098255631908539, 'audio': 'audio/dog1.wav'},
      {'Rand': 0.10853729651072486, 'audio': 'audio/misa3.wav'},
      {'Rand': 0.8727164947544499, 'audio': 'audio/fire2.wav'},
      {'Rand': 0.37876379074653543, 'audio': 'audio/volcano2.wav'},
      {'Rand': 0.07449572301082907, 'audio': 'audio/cave1.wav'},
      {'Rand': 0.3119597057505705, 'audio': 'audio/wind2.wav'},
      {'Rand': 0.7026996611114993, 'audio': 'audio/rain4.wav'},
      {'Rand': 0.5024327709834819, 'audio': 'audio/bird2.wav'},
      {'Rand': 0.19057705111399037, 'audio': 'audio/misa2.wav'},
      {'Rand': 0.10018190829362539, 'audio': 'audio/wind3.wav'},
      {'Rand': 0.2678857460732177, 'audio': 'audio/weird2.wav'},
      {'Rand': 0.4939129709456834, 'audio': 'audio/river1.wav'},
      {'Rand': 0.27695483462910453, 'audio': 'audio/weird1.wav'}]
    Routine Sound1
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Question-sets_loop.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'text_box': 'sad.txt'},
        {'text_box': 'happy.txt'},
        {'text_box': 'joy.txt'}]
      Routine question
    LoopTerminator trials
    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Question1_Happy
      Routine Querstion2_Sad
      Routine Queastion3_Joy
    LoopTerminator inner_loop
  LoopTerminator question_loop
